PsychoPy2experiment version="1.84.1"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = stimuliDemostrationProject
  Units = use prefs
  Screen = 1
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Routines
  Routine practice
  Routine ImageDisplay
    ImageComponent image
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      image = jiborobot.jpg
      size = [0.5, 0.5]
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  Routine instruction
    TextComponent expInstruction
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Experiment Instruction

        This is the experiment instruction.

        PRESS ANY KEY TO CONTINUE.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine video
    MovieComponent movie
      movie = Dont Cry For Me Argentina  Madonna  Lyrics.mp4
      stopVal [duration (s)] = 30
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      backend = moviepy
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    SoundComponent sound_3
      sound = I_Believe_I_Can_Fly_sample.ogg
      stopVal [duration (s)] = 25
      startVal [time (s)] = 0.0
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  Routine EndOfExperiment_CN
    TextComponent text_2
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        End of Experiment
        我爱 PsychoPy
        I love PsychoPy
        me encanta PsychoPy
        我喜歡 PsychoPy
  Routine audio
    SoundComponent sound_1
      sound = A
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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    SoundComponent sound_2
      sound = I_Believe_I_Can_Fly_sample.ogg
      stopVal [duration (s)] = 5
      startVal [time (s)] = 1
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Flow
  LoopInitiator practiceLoop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine practice
  LoopTerminator practiceLoop
  Routine instruction
  LoopInitiator experimentalLoop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator experimentalLoop
  Routine ImageDisplay
  Routine audio
  Routine video
  Routine EndOfExperiment_CN
