PsychoPy2experiment version="1.80.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = NBackTask
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      text [set every repeat] = $number
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = datasource.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'number': 1},
      {'number': 2},
      {'number': 3},
      {'number': 4},
      {'number': 5},
      {'number': 6},
      {'number': 7},
      {'number': 8},
      {'number': 9}]
    Routine trial
  LoopTerminator trials
