PsychoPy2experiment version="1.78.00"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'Session': u'001', u'Participant': u''}
  expName = stroop
  logging level = warning
  Units = pix
  Screen = 1
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Routines
  Routine trial
    TextComponent stimulus
      color [set every repeat] = $stimColor
      text [set every repeat] = $stimText
      startVal [time (s)] = 0.5
      letterHeight = 100
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    GratingComponent fixation
      opacity = .7
      tex = None
      mask = circle
      units = pix
      startVal [time (s)] = 0
      sf = 32
      size = 16
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instrText
      wrapWidth = 800
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 50
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      text:
        OK. Ready?

        Remember:
        1) Stay fixated on the central dot.
        2) Ignore the word itself; press:
        	- Left for red LETTERS
        	- Down for green LETTERS
        	- Right for blue LETTERS
        	- (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      wrapWidth = 800
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 50
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
    conditions:
      [{u'stimColor': u'red', u'stimText': u'red', u'congruent': 1, u'corrAns': u'left'},
      {u'stimColor': u'green', u'stimText': u'red', u'congruent': 0, u'corrAns': u'down'},
      {u'stimColor': u'green', u'stimText': u'green', u'congruent': 1, u'corrAns': u'down'},
      {u'stimColor': u'blue', u'stimText': u'green', u'congruent': 0, u'corrAns': u'right'},
      {u'stimColor': u'blue', u'stimText': u'blue', u'congruent': 1, u'corrAns': u'right'},
      {u'stimColor': u'red', u'stimText': u'blue', u'congruent': 0, u'corrAns': u'left'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
